acquisition:
  metadata:
    driver: voxel.metadata.metadata_class
    module: MetadataClass
    init:
      metadata_dictionary:
        instrument_type: speakeasy
        subject_id: 123456
        experimenter_name: [adam glaser]
        immersion_medium: 0.05X SSC
        immersion_medium_refractive_index: 1.33
        x_anatomical_direction: Anterior_to_posterior
        y_anatomical_direction: Inferior_to_superior
        z_anatomical_direction: Left_to_right
      date_format: year/month/day/hour/minute/second
      name_specs:
        deliminator: _
        format: [ instrument_type, subject_id ]
  operations: {}
#    C15440-20UP:
#      robocopy:
#        type: transfer
#        driver: voxel.transfers.robocopy
#        module: FileTransfer
#        init:
#          external_directory: C:\Users\micah.woodard\Downloads\exaspim-test
#          local_directory: C:\Users\micah.woodard\Downloads
#      imaris:
#        type: writer
#        driver: voxel.writers.imaris
#        module: Writer
#        init:
#          path: C:\Users\micah.woodard\Downloads
#        properties:
#          compression: lz4shuffle
#          data_type: uint16
#      max_projection:
#        type: process
#        driver: voxel.processes.cpu.max_projection
#        module: MaxProjection
#        init:
#          path: ./local_test
#        properties:
#          data_type: uint16
#          projection_count_px: 32

  tiles: []